PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = change-localization
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome.
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  Routine practice
  Routine array
    PolygonComponent fixA
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent stim1
      durationEstim = 1
      fillColor [set every repeat] = $stim1_color
      lineColor [set every repeat] = $stim1_color
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim2
      durationEstim = 1
      fillColor [set every repeat] = $stim2_color
      lineColor [set every repeat] = $stim2_color
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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  Routine probe
    PolygonComponent fixB
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    MouseComponent mouse
      clickable = stim1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
      syncScreenRefresh = True
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    PolygonComponent probe1
      durationEstim = 1
      fillColor [set every repeat] = $probe1_color
      lineColor [set every repeat] = $probe1_color
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe2
      durationEstim = 1
      fillColor [set every repeat] = $probe2_color
      lineColor [set every repeat] = $probe2_color
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('x1', -0.25), ('y1', -0.25), ('stim1_color', 'red'), ('probe1_color', 'blue'), ('x2', -0.25), ('y2', -0.25), ('stim2_color', 'orange'), ('probe2_color', 'orange')]),
      OrderedDict([('x1', -0.25), ('y1', -0.25), ('stim1_color', 'orange'), ('probe1_color', 'orange'), ('x2', 0.0), ('y2', 0.25), ('stim2_color', 'blue'), ('probe2_color', 'green')])]
    Routine array
    Routine probe
  LoopTerminator trials
